CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:[A-P](?P<position>\\\\d+)_T(?P<tpos>\\\\d+)_C(?P<Channel>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
    Select the rule criteria:and (metadata does Channel "0")
    Name to assign these images:MacDeathRaw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:   
    Name to assign this image:IlluminationCorrection C0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Macdeathcorrected
    Image or measurement?:Image
    Select the first image:MacDeathRaw
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:IlluminationCorrection C0
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Macdeathcorrected
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.009
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
ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\\\\\\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_Nuclei,Image|URL_MacDeathRaw,Image|Metadata_tpos,Image|Metadata_position
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::DRAQ7 death_
    Overwrite without warning?:No
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