CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:[A-P](?P<position>\\\\d+)_T(?P<tpos>\\\\d+)_C(?P<Channel>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:2
    Select the rule criteria:and (metadata does Channel "0")
    Name to assign these images:MacDeathRaw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:dTomatoCandidaRaw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:EscapedCandidaRaw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:   
    Name to assign this image:IlluminationCorrection C1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:   
    Name to assign this image:IlluminationCorrection C2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:dTomatoCandida
    Image or measurement?:Image
    Select the first image:dTomatoCandidaRaw
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:IlluminationCorrection C1
    Multiply the second image by:1.0
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
ImageMath:[module_num:6|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:EscapedCandida
    Image or measurement?:Image
    Select the first image:EscapedCandidaRaw
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:IlluminationCorrection C2
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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
    Select the input image:dTomatoCandida
    Name the output image:dTomatosmoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.5
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
ApplyThreshold:[module_num:8|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
    Select the input image:dTomatosmoothed
    Name the output image:ThreshTomato
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0035,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Smooth:[module_num:9|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
    Select the input image:EscapedCandida
    Name the output image:EscapedCandidasmoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.5
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:EscapedCandidasmoothed
    Name the output image:EscapedCandidaFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures

ApplyThreshold:[module_num:11|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
    Select the input image:EscapedCandidaFeatures
    Name the output image:ThreshEscape
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.08
    Lower and upper bounds on threshold:0.011,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Morph:[module_num:12|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
    Select the input image:ThreshEscape
    Name the output image:ThreshEscapeNoiseR
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MeasureImageAreaOccupied:[module_num:13|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshEscape
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshTomato
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshEscapeNoiseR

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\\\\\\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|AreaOccupied_AreaOccupied_ThreshTomato,Image|AreaOccupied_AreaOccupied_ThreshEscapeNoiseR,Image|AreaOccupied_AreaOccupied_ThreshEscape,Image|Metadata_tpos,Image|Metadata_position
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::hyphal escape_
    Overwrite without warning?:No
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